Create_Global_Parameter
/PARAMETER_NAME=OUTPUT_DATA_FOLDER
/PARAMETER_VALUE=Z:\Projects\CMB_innosuisse_shoe_oa\project_only\Multi-segment foot marker set project\Data\V3D_new processing\S13\Output\
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;

Create_Global_Parameter
/PARAMETER_NAME=CMO_FOLDER
/PARAMETER_VALUE=Z:\Projects\CMB_innosuisse_shoe_oa\project_only\Multi-segment foot marker set project\Data\V3D_new processing\S13\
;

Compute_Planar_Angle
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RD1M+RTN+RMMA
! /RESULT_FOLDER=PROCESSED
/RESULT_NAME=Right_MLAA_Angle
! /COMPUTE_3PT_ANGLE=TRUE
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/REFERENCE_SEGMENT=RFT
/PROJECTION_PLANE=YZ
! /USE_RIGHT_HAND_RULE=TRUE
/USE_0_TO_360_DEGREES=FALSE
! /MAX_ALLOWABLE_NORMALIZED_DISTANCE_TO_PLANE=0.1
;

Metric_Mean
/SIGNAL_TYPES=DERIVED
/SIGNAL_NAMES=Right_MLAA_Angle
/SIGNAL_FOLDER=PROCESSED
! /SIGNAL_COMPONENTS=ALL_COMPONENTS
/EVENT_SEQUENCE=
/EXCLUDE_EVENTS=
/METRIC_NAME=Mean_Right_MLAA_Angle
/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Standing_Mean_Right_MLAA_Angle.txt
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Mean_Right_MLAA_Angle
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

File_Save_As
/FILE_NAME=::CMO_FOLDER&S13_B_WW_WOW.cmo
;

