Interpolate
/SIGNAL_TYPES=TARGET
;

Lowpass_Filter
/SIGNAL_TYPES=TARGET
 /SIGNAL_FOLDER=PROCESSED
 /FREQUENCY_CUTOFF=10.0
;

Event_Minimum
/RESULT_EVENT_NAME=RHE_Y
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RHEE
/SIGNAL_COMPONENTS=Y
! /FRAME_OFFSET=0
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! /EVENT_SEQUENCE_INSTANCE=0
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! /EVENT_SUBSEQUENCE_INSTANCE=0
! /EVENT_INSTANCE=0
/FRAME_WINDOW=5
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;

Event_Maximum
/RESULT_EVENT_NAME=RHS_High
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RHEE
/SIGNAL_COMPONENTS=Z
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/FRAME_WINDOW=20
/THRESHOLD=0.1
;

Event_Global_Minimum
/RESULT_EVENT_NAME=RHS
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RHEE
/SIGNAL_COMPONENTS=Z
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/EVENT_SUBSEQUENCE=RHE_Y+RHS_High
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;

Event_Global_Minimum
/RESULT_EVENT_NAME=RHS
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RHEE
/SIGNAL_COMPONENTS=Z
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/EVENT_SUBSEQUENCE=RHE_Y
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;

Event_Global_Minimum
/RESULT_EVENT_NAME=RTO
/SIGNAL_TYPES=TARGET
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=RTOE
/SIGNAL_COMPONENTS=Z
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/EVENT_SUBSEQUENCE=RHS+RHS
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;

Create_Global_Parameter
/PARAMETER_NAME=OUTPUT_DATA_FOLDER
/PARAMETER_VALUE=P:\Projects\CMB_innosuisse_shoe_oa\project_only\Multi-segment foot marker set project\Data\V3D_new_processing\S01\Output\
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;

Create_Global_Parameter
/PARAMETER_NAME=CMO_FOLDER
/PARAMETER_VALUE=P:\Projects\CMB_innosuisse_shoe_oa\project_only\Multi-segment foot marker set project\Data\V3D_new_processing\S01\
;

Compute_Model_Based_Data
/RESULT_NAME=Right_HFSHK_Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Hindfoot
/REFERENCE_SEGMENT=Right Shank OFM
/RESOLUTION_COORDINATE_SYSTEM=
! /NORMALIZATION=FALSE
/NORMALIZATION_METHOD=TRUE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
;

Metric_Maximum
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=Max_Right_HFSHK_Angle
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Right_HFSHK_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
! /CREATE_GLOBAL_MAXIMUM=FALSE
! /CREATE_TRIAL_MAXIMUM=FALSE
;

Metric_Minimum
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/RESULT_METRIC_NAME=Min_Right_HFSHK_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_HFSHK_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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! /CREATE_GLOBAL_MINIMUM=FALSE
! /CREATE_TRIAL_MINIMUM=FALSE
;

Evaluate_Expression
/EXPRESSION=METRIC::PROCESSED::Max_Right_HFSHK_Angle-METRIC::PROCESSED::Min_Right_HFSHK_Angle
/RESULT_NAME=Right_HFSHK_ROM
/RESULT_TYPE=METRIC
;

Compute_Model_Based_Data
/RESULT_NAME=Right_MFHF_Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Midfoot
/REFERENCE_SEGMENT=Right Hindfoot
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=Max_Right_MFHF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_MFHF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=Min_Right_MFHF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_MFHF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Evaluate_Expression
/EXPRESSION=METRIC::PROCESSED::Max_Right_MFHF_Angle-METRIC::PROCESSED::Min_Right_MFHF_Angle
/RESULT_NAME=Right_MFHF_ROM
/RESULT_TYPE=METRIC
;

Compute_Model_Based_Data
/RESULT_NAME=Right_FFMF_Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Forefoot
/REFERENCE_SEGMENT=Right Midfoot
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=Max_Right_FFMF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_FFMF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=Min_Right_FFMF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_FFMF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Evaluate_Expression
/EXPRESSION=METRIC::PROCESSED::Max_Right_FFMF_Angle-METRIC::PROCESSED::Min_Right_FFMF_Angle
/RESULT_NAME=Right_FFMF_ROM
/RESULT_TYPE=METRIC
;

Compute_Model_Based_Data
/RESULT_NAME=Right_FFHF_Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Forefoot
/REFERENCE_SEGMENT=Right Hindfoot
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=Max_Right_FFHF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_FFHF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=Min_Right_FFHF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_FFHF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Evaluate_Expression
/EXPRESSION=METRIC::PROCESSED::Max_Right_FFHF_Angle-METRIC::PROCESSED::Min_Right_FFHF_Angle
/RESULT_NAME=Right_FFHF_ROM
/RESULT_TYPE=METRIC
;

Compute_Model_Based_Data
/RESULT_NAME=Right_HLXFF_Angle
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Hallux
/REFERENCE_SEGMENT=Right Forefoot
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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;

Metric_Maximum
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/RESULT_METRIC_NAME=Max_Right_HLXFF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_HLXFF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Minimum
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/RESULT_METRIC_NAME=Min_Right_HLXFF_Angle
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/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_HLXFF_Angle
/COMPONENT_SEQUENCE=ALL
/EVENT_SEQUENCE=RHS+RHS
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Evaluate_Expression
/EXPRESSION=METRIC::PROCESSED::Max_Right_HLXFF_Angle-METRIC::PROCESSED::Min_Right_HLXFF_Angle
/RESULT_NAME=Right_HLXFF_ROM
/RESULT_TYPE=METRIC
;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_All_Patterns_Full_Cycle.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_HFSHK_Angle+Right_MFHF_Angle+Right_FFMF_Angle+Right_FFHF_Angle+Right_HLXFF_Angle
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=RHS+RHS
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! /USE_POINT_RATE=FALSE
/NORMALIZE_DATA=TRUE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_JSON_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /CREATE_FOLDER_PATH=TRUE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_All_Patterns_Stance_Phase.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right_HFSHK_Angle+Right_MFHF_Angle+Right_FFMF_Angle+Right_FFHF_Angle+Right_HLXFF_Angle
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/COMPONENT_SEQUENCE=ALL
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/EVENT_SEQUENCE=RHS+RTO
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/NORMALIZE_DATA=TRUE
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;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_HFSHK_Angles.txt
/SIGNAL_TYPES=METRIC+METRIC+METRIC
/SIGNAL_NAMES=Max_Right_HFSHK_Angle+Min_Right_HFSHK_Angle+Right_HFSHK_ROM
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED
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! /NORMALIZE_DATA=FALSE
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;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_MFHF_Angles.txt
/SIGNAL_TYPES=METRIC+METRIC+METRIC
/SIGNAL_NAMES=Max_Right_MFHF_Angle+Min_Right_MFHF_Angle+Right_MFHF_ROM
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED
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;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_FFMF_Angles.txt
/SIGNAL_TYPES=METRIC+METRIC+METRIC
/SIGNAL_NAMES=Max_Right_FFMF_Angle+Min_Right_FFMF_Angle+Right_FFMF_ROM
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED
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;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_FFHF_Angles.txt
/SIGNAL_TYPES=METRIC+METRIC+METRIC
/SIGNAL_NAMES=Max_Right_FFHF_Angle+Min_Right_FFHF_Angle+Right_FFHF_ROM
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED
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;

Export_Data_To_Ascii_File
/FILE_NAME=::OUTPUT_DATA_FOLDER&Gait_Right_HLXFF_Angles.txt
/SIGNAL_TYPES=METRIC+METRIC+METRIC
/SIGNAL_NAMES=Max_Right_HLXFF_Angle+Min_Right_HLXFF_Angle+Right_HLXFF_ROM
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED
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;

File_Save_As
/FILE_NAME=::CMO_FOLDER&S01_B_WW_WOW.CMO
;

